WorkflowBuilder(Version=2.8.5)
GroupWorkflow Metadata
    Bonsai.IO.ReadAllText(Path=RigConfiguration.yaml)
    -> RigConfiguration.DeserializeFromYaml(Type=TypeMapping<RigConfiguration.RigConfig>)
    -> Take(Count=1)
    -> AsyncSubject RigConfig

    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            SubscribeSubject RigConfig
            -> MemberSelector(Selector=ClockSynchronizer)
            -> InputMapping(PortName(Selector=PortName))
            -> CreateObservable
                ExternalizedMapping(PortName)
                -> GroupWorkflow TimestampGenerator(Description="Provides support for uninterruptible synchronization of all arena Harp devices and setting the UTC time reference.")
                    BehaviorSubject<System.Object> SynchronizeTimestamp
                    -> Bonsai.Harp.SynchronizeTimestamp => #1
                    ExternalizedMapping(PortName) => #2
                    #1, #2 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
                    -> MulticastSubject SynchronizerEvents
                    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
                    -> MulticastSubject Heartbeats
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput

            PublishSubject<Bonsai.Harp.HarpMessage> SynchronizerEvents
            PublishSubject<Bonsai.Harp.HarpMessage> Heartbeats

        GroupWorkflow VideoController
            SubscribeSubject RigConfig
            -> MemberSelector(Selector=CameraController)
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=DeviceName) => #1
                ExternalizedMapping(Value(DisplayName=DeviceName)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<RigConfiguration.CameraControllerName>(Value=CameraControllerGen2))
                -> WorkflowOutput
            -> SelectMany CameraControllerGen2
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ControllerSettings

                SubscribeSubject ControllerSettings
                -> MemberSelector(Selector=Triggers)
                -> Merge
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=TriggerName) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<RigConfiguration.TriggerName>(Value=Trigger0))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> AsyncSubject Trigger0

                SubscribeSubject ControllerSettings
                -> MemberSelector(Selector=Triggers)
                -> Merge
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=TriggerName) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<RigConfiguration.TriggerName>(Value=Trigger1))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> AsyncSubject Trigger1

                SubscribeSubject Trigger0
                -> MemberSelector(Selector=TriggerFrequency)
                -> PropertyMapping(Frequency)
                -> GroupWorkflow ConfigurePwmCam0 => #18
                    Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam0EventPayload(ConfigureCam0Event=EventOnTrigger)) => #0
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> IntProperty(Value=50)
                    -> Take(Count=1)
                    -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam0) => #4
                    #0, #4 -> Merge
                    -> WorkflowOutput
                SubscribeSubject Trigger1
                -> MemberSelector(Selector=TriggerFrequency)
                -> PropertyMapping(Frequency)
                -> GroupWorkflow ConfigurePwmCam1 => #22
                    Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam1EventPayload(ConfigureCam1Event=EventOnTrigger)) => #0
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> IntProperty(Value=125)
                    -> Take(Count=1)
                    -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam1) => #4
                    #0, #4 -> Merge
                    -> WorkflowOutput
                SubscribeSubject StartCameras
                -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StartCam0 StartCam1")) => #24
                SubscribeSubject StopCameras
                -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StopCam0 StopCam1")) => #26
                #18, #22, #24, #26 -> Merge => #27
                ExternalizedMapping(PortName) => #28
                #27, #28 -> Harp.CameraControllerGen2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM7)
                -> MulticastSubject CameraControllerEvents => #30
                -> WorkflowOutput
                #30 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam0Event)
                -> Condition TriggerEvent => #33
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                    -> WorkflowOutput
                SubscribeSubject Trigger0 => #34
                #33, #34 -> WithLatestFrom
                -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                -> MulticastSubject Triggers
                #30 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam1Event)
                -> Condition TriggerEvent => #39
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                    -> WorkflowOutput
                SubscribeSubject Trigger1 => #40
                #39, #40 -> WithLatestFrom
                -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                -> MulticastSubject Triggers
            -> WorkflowOutput

            BehaviorSubject<System.Object> StartCameras
            BehaviorSubject<System.Object> StopCameras
            ReplaySubject<System.Reactive.Linq.IGroupedObservable(RigConfiguration.TriggerSource,Bonsai.Harp.Timestamped(Harp.CameraControllerGen2.CameraEvents))> Triggers(BufferSize=nil)
            PublishSubject<Bonsai.Harp.HarpMessage> CameraControllerEvents

        GroupWorkflow Cameras
            SubscribeSubject RigConfig
            -> MemberSelector(Selector=Cameras)
            -> Merge => #2
            Annotation "Race condition!"(Text="Race condition!") => #3
            #2, #3 -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject source

                SubscribeSubject RigConfig
                -> MemberSelector(Selector=CameraController.Triggers)
                -> Merge => #5
                SubscribeSubject source
                -> MemberSelector(Selector=TriggerName)
                -> PropertyMapping(TriggerName) => #8
                #5, #8 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=TriggerName) => #1
                    ExternalizedMapping(Value(DisplayName=TriggerName)) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<RigConfiguration.TriggerName>(Value=Trigger1))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> AsyncSubject TriggerSource

                SubscribeSubject TriggerSource
                -> MemberSelector(Selector=TriggerName)
                -> SelectMany GetTriggerByKey(Description="Get secific Observable from IGroupObservable outputs each element") => #14
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject source

                    ExternalizedMapping(Name(DisplayName=IGroupObservableSubject, Category=Subject))
                    -> SubscribeSubject Triggers => #4
                    SubscribeSubject source
                    -> PropertyMapping(TiggerName(Selector=it)) => #6
                    #4, #6 -> SelectMany
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject Source

                        SubscribeSubject Source => #3
                        ExternalizedMapping(TiggerName) => #4
                        #3, #4 -> Condition
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Key.TriggerName) => #1
                            ExternalizedMapping(Value(DisplayName=TiggerName)) => #2
                            #1, #2 -> Equal(Operand=WorkflowProperty<RigConfiguration.TriggerName>(Value=Trigger1))
                            -> WorkflowOutput
                        -> Merge
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject TriggerSource
                -> MemberSelector(Selector=TriggerFrequency) => #16
                SubscribeSubject source
                -> MemberSelector(Selector=ExposureTime) => #18
                #16, #18 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.Min(Item2, 1e6 / Item1 - 500)
                -> PropertyMapping(ExposureTime) => #21
                SubscribeSubject source
                -> PropertyMapping(Gain(Selector=Gain), Binning(Selector=Binning), SerialNumber(Selector=SerialNumber)) => #23
                #14, #21, #23 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=23391015, ColorProcessing=Default, ExposureTime=5000, Gain=1, Binning=1) => #24
                SubscribeSubject source
                -> MemberSelector(Selector=CameraName) => #26
                SubscribeSubject TriggerSource
                -> MemberSelector(Selector=TriggerFrequency) => #28
                #26, #28 -> Zip => #29
                #24, #29 -> WithLatestFrom
                -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                -> WorkflowOutput
            -> ReplaySubject FrameEvents(BufferSize=nil)

    GroupWorkflow CameraTopImagePreProcessing
        SubscribeSubject FrameEvents => #0
        ExternalizedMapping(Value(DisplayName=StreamId)) => #1
        #0, #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key.Item1) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<RigConfiguration.CameraName>(Value=CameraTop))
            -> WorkflowOutput
        -> Merge
        -> Bonsai.Harp.ConvertTimestamped Undistort => #4
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Image)
            -> Bonsai.Vision.ResizeCanvas(Size(Width=1680, Height=1260), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=0), Offset=nil)
            -> Bonsai.Vision.Undistort(ImageSize=nil, Alpha=0, FocalLength(X=1000, Y=1000), PrincipalPoint(X=840, Y=630), RadialDistortion(X=-0.3, Y=0, Z=0), TangentialDistortion(X=0, Y=0))
            -> Bonsai.Vision.Resize(Size(Width=1440, Height=1080), Interpolation=Linear) => #4
            #0 -> MemberSelector(Selector=ChunkData) => #5
            #4, #5 -> Zip
            -> CreateVideoDataFrame
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=ImagePreProcessingEvents, Description="The name of the shared subject", Category=Subject)) => #5
        #4, #5 -> PublishSubject ProcessedImage => #6
        Source2=#6 -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject ProcessedImage => #1
        ExternalizedMapping(WholeImageThreshold, NestThreshold) => #2
        #1, #2 -> GroupWorkflow BlobTracking => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(WholeImageThreshold, NestThreshold) => #1
            #0, #1 -> Bonsai.Harp.ConvertTimestamped BinaryRegions
                WorkflowInput Source1
                -> MemberSelector(Selector=Image) => #1
                -> Bonsai.Vision.MaskPolygon => #2
                  Regions(ArrayOfPoint(Point(X=1254, Y=26), Point(X=317, Y=15), Point(X=300, Y=548), Point(X=302, Y=1066), Point(X=1281, Y=1067)))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=WholeImageThreshold)) => #3
                #2, #3 -> Bonsai.Vision.Threshold(ThresholdValue=255, MaxValue=255, ThresholdType=BinaryInv) => #4
                #1 -> Bonsai.Vision.MaskPolygon => #5
                  Regions
                    ArrayOfPoint
                      Point(X=1064, Y=876)
                      Point(X=1084, Y=860)
                      Point(X=1091, Y=840)
                      Point(X=1092, Y=807)
                      Point(X=1088, Y=797)
                      Point(X=1068, Y=776)
                      Point(X=1045, Y=764)
                      Point(X=1014, Y=779)
                      Point(X=989, Y=799)
                      Point(X=985, Y=833)
                      Point(X=989, Y=867)
                      Point(X=1013, Y=881)
                      Point(X=1038, Y=889)
                    ArrayOfPoint
                      Point(X=602, Y=252)
                      Point(X=602, Y=191)
                      Point(X=574, Y=174)
                      Point(X=550, Y=168)
                      Point(X=522, Y=180)
                      Point(X=497, Y=197)
                      Point(X=491, Y=221)
                      Point(X=493, Y=250)
                      Point(X=512, Y=267)
                      Point(X=547, Y=284)
                    ArrayOfPoint
                      Point(X=572, Y=764)
                      Point(X=598, Y=743)
                      Point(X=601, Y=712)
                      Point(X=601, Y=680)
                      Point(X=565, Y=652)
                      Point(X=541, Y=645)
                      Point(X=513, Y=658)
                      Point(X=488, Y=675)
                      Point(X=482, Y=699)
                      Point(X=487, Y=740)
                      Point(X=514, Y=761)
                      Point(X=546, Y=774)
                    ArrayOfPoint
                      Point(X=1074, Y=391)
                      Point(X=1086, Y=373)
                      Point(X=1088, Y=348)
                      Point(X=1082, Y=318)
                      Point(X=1056, Y=300)
                      Point(X=1031, Y=287)
                      Point(X=1010, Y=293)
                      Point(X=981, Y=311)
                      Point(X=978, Y=332)
                      Point(X=982, Y=368)
                      Point(X=1012, Y=392)
                      Point(X=1042, Y=407)
                    ArrayOfPoint(Point(X=791, Y=786), Point(X=791, Y=786), Point(X=791, Y=786), Point(X=791, Y=786))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=NestThreshold)) => #6
                #5, #6 -> Bonsai.Vision.Threshold(ThresholdValue=237, MaxValue=255, ThresholdType=BinaryInv) => #7
                #1 -> Bonsai.Vision.MaskPolygon => #8
                  Regions
                    ArrayOfPoint
                      Point(X=335, Y=391)
                      Point(X=330, Y=552)
                      Point(X=329, Y=722)
                      Point(X=330, Y=967)
                      Point(X=328, Y=1046)
                      Point(X=462, Y=1040)
                      Point(X=614, Y=1042)
                      Point(X=845, Y=1040)
                      Point(X=967, Y=1037)
                      Point(X=1081, Y=1037)
                      Point(X=1166, Y=1038)
                      Point(X=1214, Y=1042)
                      Point(X=1259, Y=1048)
                      Point(X=1252, Y=1000)
                      Point(X=1247, Y=929)
                      Point(X=1244, Y=788)
                      Point(X=1242, Y=612)
                      Point(X=1241, Y=525)
                      Point(X=1239, Y=436)
                      Point(X=1231, Y=277)
                      Point(X=1228, Y=181)
                      Point(X=1228, Y=44)
                      Point(X=1150, Y=47)
                      Point(X=1043, Y=44)
                      Point(X=701, Y=36)
                      Point(X=349, Y=41)
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=InArenaThreshold)) => #9
                #8, #9 -> Bonsai.Vision.Threshold(ThresholdValue=104, MaxValue=255, ThresholdType=BinaryInv) => #10
                #4, #7, #10 -> Zip
                -> Add
                -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.SortBinaryRegions
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=TrackingEvents)) => #4
        #3, #4 -> PublishSubject TrackingTop
        -> WorkflowOutput

    GroupWorkflow BinaryRegionsTracking
        ExternalizedMapping(Value(DisplayName=NumberOfTrackingSubjects))
        -> IntProperty(Value=2)
        -> BehaviorSubject NumberOfTrackingSubjects

        ExternalizedMapping(Name(DisplayName=TrackingEvents, Description=Contours, Category=Subject))
        -> SubscribeSubject TrackingTop
        -> Bonsai.Harp.ConvertTimestamped BinaryRegionsTracking
            WorkflowInput Source1 => #0
            SubscribeSubject NumberOfTrackingSubjects
            -> PropertyMapping(ExpectedNumberOfConnectedComponents) => #2
            #0, #2 -> BinaryRegionsTracking(ExpectedNumberOfConnectedComponents=2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition NotNull => #6
          Expression: it.Value != null
        ExternalizedMapping(Name(DisplayName=BinaryRegionsEvents, Description="The name of the shared subject with binary regions tracking", Category=Subject)) => #7
        #6, #7 -> PublishSubject "BinaryRegionsTracking (Subject)"
        -> SelectMany IndexConnectedComponents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.DistConnCompCollection.ConnCompCollection)
            -> Concat => #2
            #0 -> MemberSelector(Selector=Value) => #3
            #2, #3 -> WithLatestFrom => #4
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> ElementIndex
            -> WorkflowOutput
        -> GroupBy(KeySelector=Index, ElementSelector=Value) => #10
        ExternalizedMapping(Name(DisplayName=BinaryRegionsObservable, Category=Subject)) => #11
        #10, #11 -> ReplaySubject BinaryRegionsObservable(BufferSize=nil) => #12
        Source2=#12 -> WorkflowOutput

    GroupWorkflow MovementBehaviorTracking
        ExternalizedMapping(Name(DisplayName=ObservableBinaryRegions, Category=Subject))
        -> SubscribeSubject BinaryRegionsObservable => #1
        ExternalizedMapping(VelocityThreshold) => #2
        #1, #2 -> SelectMany MovementBehaviorTracking => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> Merge => #4
            ExternalizedMapping(VelocityThreshold) => #5
            #4, #5 -> GroupWorkflow HeadTailTracking => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(VelocityThreshold) => #1
                #0, #1 -> Bonsai.Harp.ConvertTimestamped HeadTailVelocity
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #2
                    Range(Start=0, Count=10)
                    -> Bonsai.Vision.CreatePoint2f(X=NaN, Y=NaN) => #4
                    #0 -> MemberSelector(Selector=Item1.Centroid) => #5
                    #4, #5 -> Merge
                    -> BufferCount(Count=10, Skip=1) => #7
                    #2, #7 -> WithLatestFrom => #8
                    ExternalizedMapping(VelocityThreshold) => #9
                    #8, #9 -> HeadTailVelocity(VelocityThreshold=10) => #10
                    #0 -> MemberSelector(Selector=Item1) => #11
                    #10, #11 -> Zip
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject source
            -> MemberSelector(Selector=Key) => #8
            #6, #8 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=HeadTailObservable, Category=Subject)) => #4
        #3, #4 -> ReplaySubject HeadTailObservable(BufferSize=nil)

    GroupWorkflow LoomAngle
        ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
        -> SubscribeSubject HeadTailObservable => #1
        ExternalizedMapping(X, Y) => #2
        #1, #2 -> SelectMany LoomAngle
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> MemberSelector(Selector=Key)
            -> AsyncSubject Id
            #1 -> AsyncSubject Source

            SubscribeSubject Source
            -> Merge => #6
            ExternalizedMapping(X, Y) => #7
            #6, #7 -> Bonsai.Harp.ConvertTimestamped => #8
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Heading,Item1.Centroid") => #1
                -> MemberSelector(Selector=Item1) => #2
                #1 -> MemberSelector(Selector=Item2) => #3
                ExternalizedMapping(X(Category=LoomPosition), Y(Category=LoomPosition))
                -> Bonsai.Vision.CreatePoint2f(X=872, Y=488) => #5
                #3, #5 -> WithLatestFrom
                -> AngleCalculator => #7
                #2, #7 -> Zip
                -> Subtract
                -> NormalizeAngle
                -> WorkflowOutput
            SubscribeSubject Id => #9
            #8, #9 -> WithLatestFrom
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #4
        ExternalizedMapping(Name(DisplayName=LoomAngle, Category=Subject)) => #5
        #4, #5 -> ReplaySubject LoomAngleObservable(BufferSize=nil)

    SubscribeSubject ProcessedImage
    -> MemberSelector(Selector=Value.Image)
    -> GroupWorkflow LoomRegion
        ExternalizedMapping(HeadTail, RegionOfInterest1)
        -> Defer
            ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
            -> SubscribeSubject HeadTailObservable => #1
            ExternalizedMapping(RegionOfInterest1) => #2
            #1, #2 -> SelectMany LoomRegion
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject Id
                #1 -> AsyncSubject Source

                SubscribeSubject Source
                -> Merge
                -> Bonsai.Harp.ConvertTimestamped => #7
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Head)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=RegionOfInterest1))
                -> PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>
                  MemberName=Regions
                  Value
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> PropertyMapping(Regions) => #10
                #7, #10 -> Aeon.Acquisition.RegionContainsPoint => #11
                  Regions
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> Condition Inside => #12
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #11 -> Condition Outside => #13
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot
                    -> WorkflowOutput
                #12, #13 -> WithLatestFrom => #14
                #12 -> MemberSelector(Selector=Seconds) => #15
                #14, #15 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Bonsai.Harp.ConvertTimestamped => #18
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1.Seconds) => #1
                    #0 -> MemberSelector(Selector=Item2.Seconds) => #2
                    #1, #2 -> WithLatestFrom
                    -> Subtract
                    -> WorkflowOutput
                SubscribeSubject Id => #19
                #18, #19 -> WithLatestFrom
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #2
        ExternalizedMapping(Name(DisplayName=LoomRegion, Category=Subject)) => #3
        #2, #3 -> ReplaySubject LoomRegionObservable(BufferSize=nil)

        WorkflowInput Source1

IncludeWorkflow(Path=Extensions\Logger.bonsai, WorkflowName=Exp0-PHIELDS01.bonsai)
IncludeWorkflow(Path=Extensions\ControlPanel.bonsai)
