<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p2="clr-namespace:RigConfiguration;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(cv:Contours,p1:IplImage)">
        <rx:Name>cam1</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(cv:Contours,p1:IplImage)">
        <rx:Name>cam2</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(cv:Contours,p1:IplImage)">
        <rx:Name>cam3</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(cv:Contours,p1:IplImage)">
        <rx:Name>cam4</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StreamId4" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key.Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:CameraName">
                <Value>CameraNorth</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPipeline.bonsai">
        <MinArea>100</MinArea>
        <Source>
          <Point2f>
            <X>420.75</X>
            <Y>247.46666</Y>
          </Point2f>
          <Point2f>
            <X>527.85</X>
            <Y>1553.06665</Y>
          </Point2f>
          <Point2f>
            <X>1667.7</X>
            <Y>1570.1333</Y>
          </Point2f>
          <Point2f>
            <X>1598.85</X>
            <Y>145.066666</Y>
          </Point2f>
        </Source>
        <Destination>
          <Point2f>
            <X>0</X>
            <Y>0</Y>
          </Point2f>
          <Point2f>
            <X>0</X>
            <Y>2048</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>2048</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>0</Y>
          </Point2f>
        </Destination>
        <VignetteImageFileName>Y:\phields\config\4mmVigneting2.png</VignetteImageFileName>
        <OutputImage>NorthImage</OutputImage>
        <ThresholdValue>145</ThresholdValue>
        <OutputSubject>cam1</OutputSubject>
        <Value>CameraNorth</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTime">
          <rx:TimeSpan>PT1S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StreamId3" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key.Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:CameraName">
                <Value>CameraEast</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPipeline.bonsai">
        <MinArea>100</MinArea>
        <Source>
          <Point2f>
            <X>2327.512</X>
            <Y>203.4536</Y>
          </Point2f>
          <Point2f>
            <X>527.85</X>
            <Y>1553.06665</Y>
          </Point2f>
          <Point2f>
            <X>1667.7</X>
            <Y>1570.1333</Y>
          </Point2f>
          <Point2f>
            <X>1598.85</X>
            <Y>145.066666</Y>
          </Point2f>
        </Source>
        <Destination>
          <Point2f>
            <X>1291.424</X>
            <Y>-11.31492</Y>
          </Point2f>
          <Point2f>
            <X>1293.153</X>
            <Y>2053.657</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>2048</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>0</Y>
          </Point2f>
        </Destination>
        <VignetteImageFileName>Y:\phields\config\4mmVigneting2.png</VignetteImageFileName>
        <OutputImage>EastImage</OutputImage>
        <ThresholdValue>145</ThresholdValue>
        <OutputSubject>cam2</OutputSubject>
        <Value>CameraEast</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTime">
          <rx:TimeSpan>PT1S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StreamId2" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key.Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:CameraName">
                <Value>CameraWest</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPipeline.bonsai">
        <MinArea>100</MinArea>
        <Source>
          <Point2f>
            <X>2327.512</X>
            <Y>203.4536</Y>
          </Point2f>
          <Point2f>
            <X>527.85</X>
            <Y>1553.06665</Y>
          </Point2f>
          <Point2f>
            <X>1667.7</X>
            <Y>1570.1333</Y>
          </Point2f>
          <Point2f>
            <X>1598.85</X>
            <Y>145.066666</Y>
          </Point2f>
        </Source>
        <Destination>
          <Point2f>
            <X>1291.424</X>
            <Y>-11.31492</Y>
          </Point2f>
          <Point2f>
            <X>1293.153</X>
            <Y>2053.657</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>2048</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>0</Y>
          </Point2f>
        </Destination>
        <VignetteImageFileName>Y:\phields\config\4mmVigneting2.png</VignetteImageFileName>
        <OutputImage>WestImage</OutputImage>
        <ThresholdValue>145</ThresholdValue>
        <OutputSubject>cam3</OutputSubject>
        <Value>CameraWest</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTime">
          <rx:TimeSpan>PT1S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StreamId1" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key.Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:CameraName">
                <Value>CameraTop</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPipeline.bonsai">
        <MinArea>100</MinArea>
        <Source>
          <Point2f>
            <X>2327.512</X>
            <Y>203.4536</Y>
          </Point2f>
          <Point2f>
            <X>527.85</X>
            <Y>1553.06665</Y>
          </Point2f>
          <Point2f>
            <X>1667.7</X>
            <Y>1570.1333</Y>
          </Point2f>
          <Point2f>
            <X>1598.85</X>
            <Y>145.066666</Y>
          </Point2f>
        </Source>
        <Destination>
          <Point2f>
            <X>1291.424</X>
            <Y>-11.31492</Y>
          </Point2f>
          <Point2f>
            <X>1293.153</X>
            <Y>2053.657</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>2048</Y>
          </Point2f>
          <Point2f>
            <X>2448</X>
            <Y>0</Y>
          </Point2f>
        </Destination>
        <VignetteImageFileName>Y:\phields\config\4mmVigneting2.png</VignetteImageFileName>
        <OutputImage>TopImage</OutputImage>
        <ThresholdValue>145</ThresholdValue>
        <OutputSubject>cam4</OutputSubject>
        <Value>CameraTop</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTime">
          <rx:TimeSpan>PT1S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam2</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam3</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam4</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="GroupWorkflow">
        <Name>FindContours</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>145</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>threshold</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MinArea" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>100</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FindContours</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BinaryRegionanalysis</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam2</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam3</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>cam4</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="GroupWorkflow">
        <Name>FindContours</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>145</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MinArea" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>100</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="5" To="9" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="13" To="17" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="21" To="25" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="29" To="33" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="44" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="44" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="44" Label="Source3" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source4" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="60" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="60" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="60" Label="Source3" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source4" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>