<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LogName" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogHarpObservable</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SourceStreamID.bonsai" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LogName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Loom</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LogName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PathPrefix</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PathPrefix" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="PathPrefix" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>D:\Tests\exp0-prototype-loom-dev-61a381c\2025-05-29T17-35-35</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LogName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StreamId</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LogName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>item2+item1.ToString()</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
                    <LogName>Loom0</LogName>
                    <Heartbeats />
                    <ClosingDuration xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>