<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:RepositoryLogController.bonsai">
        <RepositoryPath>..\..\</RepositoryPath>
        <DataPath>D:\ProjectPhields</DataPath>
        <FallbackPath>D:\Tests</FallbackPath>
        <ChunkSize>1</ChunkSize>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="WorkflowName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ExportMetadata.bonsai">
        <WorkflowName>RetrackingTrackingVideo.bonsai</WorkflowName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTop</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraTop</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrackingTop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:FormatBinaryRegions" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>CameraTop</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>BinaryRegionsObservable</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\MergeIGroupObservables.bonsai">
          <IGroupObservableSubject>BinaryRegionsObservable</IGroupObservableSubject>
          <ExpectedGroupCount>NumberOfTrackingSubjects</ExpectedGroupCount>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:FormatBinaryTracking">
            <p1:Address>210</p1:Address>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="harp:ConvertTimestamped">
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1.Centroid</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="GroupWorkflow">
                <Name>Id</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>new(
  it.Item2 as ID,
  it.Item1 as Centroid
)</scr:Expression>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="0" To="2" Label="Source1" />
              <Edge From="1" To="4" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source2" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
          <Heartbeats />
          <ClosingDuration xsi:nil="true" />
          <LogName>CameraTop_BinaryRegions</LogName>
          <Selector />
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BinaryRegionsTrackingEvents(Subject)</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FormatBinaryTracking">
          <p1:Address>210</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>CameraTop</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>HeadTailObservable</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\MergeIGroupObservables.bonsai">
        <IGroupObservableSubject>HeadTailObservable</IGroupObservableSubject>
        <ExpectedGroupCount>NumberOfTrackingSubjects</ExpectedGroupCount>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FormatHeadTail" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>CameraTop</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>LoomAngleObservable</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\MergeIGroupObservables.bonsai">
        <IGroupObservableSubject>LoomAngleObservable</IGroupObservableSubject>
        <ExpectedGroupCount>NumberOfTrackingSubjects</ExpectedGroupCount>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FormatDoubleId">
          <p1:Address>230</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>CameraTop</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>LoomRegionObservable</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\MergeIGroupObservables.bonsai">
        <IGroupObservableSubject>LoomRegionObservable</IGroupObservableSubject>
        <ExpectedGroupCount>NumberOfTrackingSubjects</ExpectedGroupCount>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FormatDoubleId">
          <p1:Address>240</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>CameraTop</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>