WorkflowBuilder(Version=2.8.5)
GroupWorkflow Metadata
    ExternalizedMapping(Path)
    -> GroupWorkflow Devices
        ExternalizedMapping(Path)
        -> GroupWorkflow CameraTop
            ExternalizedMapping(Path)
            -> GroupWorkflow VideoSource
                ExternalizedMapping(Path)
                -> Bonsai.IO.GetFiles(Path=C:\Users\User\Downloads\CameraTop, SearchPattern=*.avi, SearchOption=TopDirectoryOnly)
                -> Concat
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject source

                    SubscribeSubject source
                    -> PropertyMapping(FileName(Selector=it))
                    -> FastVideoFileCapture(FileName=C:\Users\User\Downloads\CameraTop\CameraTop_2025-01-17T09-00-00.avi, PlaybackRate=200) => #5
                    -> ObserveOn(Scheduler=TaskPoolScheduler)
                    -> WorkflowOutput
                    #5 -> BufferTime(TimeSpan=PT1S)
                    -> MemberSelector(Selector=Count)
                -> Concat
                -> WorkflowOutput
            -> PublishSubject CameraTop => #2
            -> WorkflowOutput
            #2 -> MemberSelector(Selector=Seconds)
            -> BufferTime(TimeSpan=PT1S)
            -> MemberSelector(Selector=Count)

    GroupWorkflow ImagePreProcessing
        ExternalizedMapping(Name(DisplayName=FrameEvents, Category=Subject))
        -> SubscribeSubject CameraTop
        -> Bonsai.Harp.ConvertTimestamped Undistort => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Image)
            -> Bonsai.Vision.ResizeCanvas(Size(Width=1680, Height=1260), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=0), Offset=nil)
            -> Bonsai.Vision.Undistort(ImageSize=nil, Alpha=0, FocalLength(X=1000, Y=1000), PrincipalPoint(X=840, Y=630), RadialDistortion(X=-0.3, Y=0, Z=0), TangentialDistortion(X=0, Y=0))
            -> Bonsai.Vision.Resize(Size(Width=1440, Height=1080), Interpolation=Linear) => #4
            #0 -> MemberSelector(Selector=ChunkData) => #5
            #4, #5 -> Zip
            -> CreateVideoDataFrame
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=ImagePreProcessingEvents, Description="The name of the shared subject", Category=Subject)) => #3
        #2, #3 -> PublishSubject ProcessedImage => #4
        Source2=#4 -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject ProcessedImage => #1
        ExternalizedMapping(WholeImageThreshold, NestThreshold) => #2
        #1, #2 -> GroupWorkflow BlobTracking => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(WholeImageThreshold, NestThreshold) => #1
            #0, #1 -> Bonsai.Harp.ConvertTimestamped BinaryRegions
                WorkflowInput Source1
                -> MemberSelector(Selector=Image) => #1
                -> Bonsai.Vision.MaskPolygon => #2
                  Regions(ArrayOfPoint(Point(X=1254, Y=26), Point(X=317, Y=15), Point(X=300, Y=548), Point(X=302, Y=1066), Point(X=1281, Y=1067)))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=WholeImageThreshold)) => #3
                #2, #3 -> Bonsai.Vision.Threshold(ThresholdValue=61, MaxValue=255, ThresholdType=BinaryInv) => #4
                #1 -> Bonsai.Vision.MaskPolygon => #5
                  Regions
                    ArrayOfPoint
                      Point(X=1064, Y=876)
                      Point(X=1084, Y=860)
                      Point(X=1091, Y=840)
                      Point(X=1092, Y=807)
                      Point(X=1088, Y=797)
                      Point(X=1068, Y=776)
                      Point(X=1045, Y=764)
                      Point(X=1014, Y=779)
                      Point(X=989, Y=799)
                      Point(X=985, Y=833)
                      Point(X=989, Y=867)
                      Point(X=1013, Y=881)
                      Point(X=1038, Y=889)
                    ArrayOfPoint
                      Point(X=602, Y=252)
                      Point(X=602, Y=191)
                      Point(X=574, Y=174)
                      Point(X=550, Y=168)
                      Point(X=522, Y=180)
                      Point(X=497, Y=197)
                      Point(X=491, Y=221)
                      Point(X=493, Y=250)
                      Point(X=512, Y=267)
                      Point(X=547, Y=284)
                    ArrayOfPoint
                      Point(X=572, Y=764)
                      Point(X=598, Y=743)
                      Point(X=601, Y=712)
                      Point(X=601, Y=680)
                      Point(X=565, Y=652)
                      Point(X=541, Y=645)
                      Point(X=513, Y=658)
                      Point(X=488, Y=675)
                      Point(X=482, Y=699)
                      Point(X=487, Y=740)
                      Point(X=514, Y=761)
                      Point(X=546, Y=774)
                    ArrayOfPoint
                      Point(X=1074, Y=391)
                      Point(X=1086, Y=373)
                      Point(X=1088, Y=348)
                      Point(X=1082, Y=318)
                      Point(X=1056, Y=300)
                      Point(X=1031, Y=287)
                      Point(X=1010, Y=293)
                      Point(X=981, Y=311)
                      Point(X=978, Y=332)
                      Point(X=982, Y=368)
                      Point(X=1012, Y=392)
                      Point(X=1042, Y=407)
                    ArrayOfPoint(Point(X=791, Y=786), Point(X=791, Y=786), Point(X=791, Y=786), Point(X=791, Y=786))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=NestThreshold)) => #6
                #5, #6 -> Bonsai.Vision.Threshold(ThresholdValue=132, MaxValue=255, ThresholdType=BinaryInv) => #7
                #1 -> Bonsai.Vision.MaskPolygon => #8
                  Regions
                    ArrayOfPoint
                      Point(X=335, Y=391)
                      Point(X=330, Y=552)
                      Point(X=329, Y=722)
                      Point(X=330, Y=967)
                      Point(X=328, Y=1046)
                      Point(X=462, Y=1040)
                      Point(X=614, Y=1042)
                      Point(X=845, Y=1040)
                      Point(X=967, Y=1037)
                      Point(X=1081, Y=1037)
                      Point(X=1166, Y=1038)
                      Point(X=1214, Y=1042)
                      Point(X=1259, Y=1048)
                      Point(X=1252, Y=1000)
                      Point(X=1247, Y=929)
                      Point(X=1244, Y=788)
                      Point(X=1242, Y=612)
                      Point(X=1241, Y=525)
                      Point(X=1239, Y=436)
                      Point(X=1231, Y=277)
                      Point(X=1228, Y=181)
                      Point(X=1228, Y=44)
                      Point(X=1150, Y=47)
                      Point(X=1043, Y=44)
                      Point(X=701, Y=36)
                      Point(X=349, Y=41)
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=InArenaThreshold)) => #9
                #8, #9 -> Bonsai.Vision.Threshold(ThresholdValue=104, MaxValue=255, ThresholdType=BinaryInv) => #10
                #4, #7, #10 -> Zip
                -> Add
                -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.SortBinaryRegions
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=TrackingEvents)) => #4
        #3, #4 -> PublishSubject TrackingTop
        -> WorkflowOutput

    GroupWorkflow BinaryRegionsTracking
        ExternalizedMapping(Value(DisplayName=NumberOfTrackingSubjects))
        -> IntProperty(Value=1)
        -> BehaviorSubject NumberOfTrackingSubjects

        ExternalizedMapping(Name(DisplayName=TrackingEvents, Description=Contours, Category=Subject))
        -> SubscribeSubject TrackingTop
        -> Bonsai.Harp.ConvertTimestamped BinaryRegionsTracking
            WorkflowInput Source1 => #0
            SubscribeSubject NumberOfTrackingSubjects
            -> PropertyMapping(ExpectedNumberOfConnectedComponents) => #2
            #0, #2 -> BinaryRegionsTracking(ExpectedNumberOfConnectedComponents=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition NotNull => #6
          Expression: it.Value != null
        ExternalizedMapping(Name(DisplayName=BinaryRegionsEvents, Description="The name of the shared subject with binary regions tracking", Category=Subject)) => #7
        #6, #7 -> PublishSubject "BinaryRegionsTrackingEvents(Subject)"
        -> SelectMany IndexConnectedComponents
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source => #3
            -> MemberSelector(Selector=Value.ConnectedComponents)
            -> Concat => #5
            #3 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> ElementIndex
            -> WorkflowOutput
        -> GroupBy(KeySelector=Index, ElementSelector=Value) => #10
        ExternalizedMapping(Name(DisplayName=BinaryRegionsObservable, Category=Subject)) => #11
        #10, #11 -> ReplaySubject BinaryRegionsObservable(BufferSize=nil) => #12
        Source2=#12 -> WorkflowOutput

    GroupWorkflow MovementBehaviorTracking
        ExternalizedMapping(Name(DisplayName=ObservableBinaryRegions, Category=Subject))
        -> SubscribeSubject BinaryRegionsObservable => #1
        ExternalizedMapping(VelocityThreshold) => #2
        #1, #2 -> SelectMany MovementBehaviorTracking => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> Merge
            -> Bonsai.Harp.ConvertTimestamped => #5
                WorkflowInput Source1 => #0
                SubscribeSubject source
                -> MemberSelector(Selector=Key) => #2
                #0, #2 -> WithLatestFrom
                -> WorkflowOutput
            ExternalizedMapping(VelocityThreshold, HistoryLength) => #6
            #5, #6 -> GroupWorkflow HeadTailTracking
                WorkflowInput Source1 => #0
                ExternalizedMapping(VelocityThreshold, HistoryLength) => #1
                #0, #1 -> Bonsai.Harp.ConvertTimestamped HeadTailVelocity
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #2
                    ExternalizedMapping(Count(DisplayName=HistoryLength)) => #3
                    -> Range(Start=0, Count=10)
                    -> Bonsai.Vision.CreatePoint2f(X=NaN, Y=NaN) => #5
                    #1 -> MemberSelector(Selector=Centroid) => #6
                    #5, #6 -> Merge => #7
                    #7, #3 -> BufferCount(Count=10, Skip=1) => #8
                    #2, #8 -> WithLatestFrom => #9
                    ExternalizedMapping(VelocityThreshold) => #10
                    #9, #10 -> HeadTailVelocity(VelocityThreshold=10) => #11
                    #0 -> MemberSelector(Selector=Item2) => #12
                    #11, #12 -> Zip
                    -> WorkflowOutput
                -> WorkflowOutput
            -> GroupBy(KeySelector=Value.Item2, ElementSelector=it)
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=HeadTailObservable, Category=Subject)) => #4
        #3, #4 -> ReplaySubject HeadTailObservable(BufferSize=nil)

    GroupWorkflow LoomAngle
        ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
        -> SubscribeSubject HeadTailObservable => #1
        ExternalizedMapping(X, Y) => #2
        #1, #2 -> SelectMany LoomAngle
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> MemberSelector(Selector=Key)
            -> AsyncSubject Id
            #1 -> AsyncSubject Source

            SubscribeSubject Source
            -> Merge => #6
            ExternalizedMapping(X, Y) => #7
            #6, #7 -> Bonsai.Harp.ConvertTimestamped
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1.Heading) => #1
                #0 -> MemberSelector(Selector=Item1.Centroid) => #2
                ExternalizedMapping(X(Category=LoomPosition), Y(Category=LoomPosition))
                -> Bonsai.Vision.CreatePoint2f(X=872, Y=488) => #4
                #2, #4 -> WithLatestFrom
                -> AngleCalculator => #6
                #1, #6 -> Zip
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.PI-Math.ABS(Math.ABS(it.Item1 - it.Item2) - Math.PI)
                -> Subtract
                -> NormalizeAngle => #10
                #0 -> MemberSelector(Selector=Item2) => #11
                #10, #11 -> Zip
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((it+Math.PI)%(2*Math.PI))-Math.PI
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupBy(KeySelector=Value.Item2, ElementSelector=it) => #4
        ExternalizedMapping(Name(DisplayName=LoomAngle, Category=Subject)) => #5
        #4, #5 -> ReplaySubject LoomAngleObservable(BufferSize=nil)

    SubscribeSubject ProcessedImage
    -> MemberSelector(Selector=Value.Image)
    -> GroupWorkflow LoomRegion
        ExternalizedMapping(HeadTail, RegionOfInterest1)
        -> Defer
            ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
            -> SubscribeSubject HeadTailObservable => #1
            ExternalizedMapping(RegionOfInterest1) => #2
            #1, #2 -> SelectMany LoomRegion
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject Id
                #1 -> AsyncSubject Source

                SubscribeSubject Source
                -> Merge
                -> Bonsai.Harp.ConvertTimestamped => #7
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Head)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=RegionOfInterest1))
                -> PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>
                  MemberName=Regions
                  Value
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> PropertyMapping(Regions) => #10
                #7, #10 -> Aeon.Acquisition.RegionContainsPoint => #11
                  Regions
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> Condition Inside => #12
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #11 -> Condition Outside => #13
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot
                    -> WorkflowOutput
                #12, #13 -> WithLatestFrom => #14
                SubscribeSubject Id => #15
                #14, #15 -> WithLatestFrom => #16
                #12 -> MemberSelector(Selector=Seconds) => #17
                #16, #17 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Bonsai.Harp.ConvertTimestamped
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector="Item1.Item1.Seconds,Item1.Item2.Seconds")
                    -> Subtract => #2
                    #0 -> MemberSelector(Selector=Item2) => #3
                    #2, #3 -> Zip
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupBy(KeySelector=Value.Item2, ElementSelector=it) => #2
        ExternalizedMapping(Name(DisplayName=LoomRegion, Category=Subject)) => #3
        #2, #3 -> ReplaySubject LoomRegionObservable(BufferSize=nil)

        WorkflowInput Source1

GroupWorkflow HeadTail
    SubscribeSubject ProcessedImage => #0
    ExternalizedMapping(Interval(DisplayName=VisualizerInterval)) => #1
    #0, #1 -> SampleInterval(Interval=PT0.05S) => #2
    SubscribeSubject NumberOfTrackingSubjects
    -> PropertyMapping(NumberOfTrackingElements) => #4
    #2, #4 -> SelectMany TrackingVisualizer
        Disable WorkflowInput Source1 => #0
        ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #1
        -> SubscribeSubject ProcessedImage => #2
        #0, #2 -> MemberSelector(Selector=Value.Image)
        -> GroupWorkflow CreateCanvas => #4
            WorkflowInput Source1
            -> InputMapping(Size(Selector=Size))
            -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
            -> WorkflowOutput
        #4, #1 -> GroupWorkflow AddImage
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> SubscribeSubject ProcessedImage => #2
            -> MemberSelector(Selector=Value.Image)
            -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
            #2 -> MemberSelector(Selector=Value.Image.Size)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
              Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
            #0, #4, #6 -> Zip
            -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
            -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
            -> WorkflowOutput
        -> Take(Count=1)
        -> BehaviorSubject Canvas

        ExternalizedMapping(Name)
        -> SubscribeSubject HeadTailObservable => #9
        ExternalizedMapping(Count(DisplayName=NumberOfTrackingElements)) => #10
        #9, #10 -> Take(Count=1)
        -> CreateObservable
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject Canvas => #3
            SubscribeSubject source
            -> Merge => #5
            #3, #5 -> Zip
            -> MemberSelector(Selector=Item1) => #7
            #5 -> SelectMany
                WorkflowInput Source1
                -> PropertyMapping(ID(Selector=Value.Item2))
                -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=BinaryRegionsObservable, ID=0)
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> PropertyMapping(Contour(Selector=Contour)) => #9
            #7, #9 -> GroupWorkflow AddBlob => #10
                WorkflowInput Source1 => #0
                ExternalizedMapping(Contour) => #1
                #0, #1 -> Bonsai.Vision.Drawing.DrawContours(ExternalColor(Val0=255, Val1=0, Val2=0, Val3=255), HoleColor(Val0=0, Val1=0, Val2=0, Val3=0), MaxLevel=0, Thickness=1, LineType=Connected8)
                -> WorkflowOutput
            #5 -> MemberSelector(Selector=Value.Item1.Head)
            -> PropertyMapping(Center(Selector=it)) => #12
            #10, #12 -> Bonsai.Vision.Drawing.Circle(Center(X=1272, Y=818), Radius=2, Color(Val0=0, Val1=0, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #13
            #5 -> MemberSelector(Selector=Value.Item1.Centroid)
            -> PropertyMapping(Center) => #15
            #13, #15 -> Bonsai.Vision.Drawing.Circle(Center(X=1274, Y=816), Radius=2, Color(Val0=0, Val1=255, Val2=0, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #16
            #5 -> MemberSelector(Selector=Value.Item1.Tail)
            -> PropertyMapping(Center) => #18
            #16, #18 -> Bonsai.Vision.Drawing.Circle(Center(X=1272, Y=813), Radius=2, Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0)
            -> Take(Count=1)
            -> MulticastSubject Canvas
            -> WorkflowOutput
        -> Concat
        -> TakeLast(Count=1)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping => #6
    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LoomAngleObservable, ID=0)
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it as LoomAngle
        )
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=LoomAngle, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #11
    IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=HeadTailObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> MemberSelector(Selector=Value.Item1.Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> VisualizerMapping => #16
    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=HeadTailObservable, ID=0)
    -> MemberSelector(Selector=Value.Item1.Velocity)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          Math.SQRT(it.X*it.X + it.Y*it.Y) as Velocity
        )
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Velocity, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #21
    #6, #11, #16, #21 -> Bonsai.Gui.TableLayoutPanelBuilder Tracking(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow LoggerRetracking
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectPhields, FallbackPath=D:\Tests, ChunkSize=1)

    ExternalizedMapping(WorkflowName)
    -> IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=RetrackingTrackingVideo.bonsai)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    Disable Annotation BinaryRegionsObservable(Text="")
    -> Disable IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=BinaryRegionsObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> Disable FormatBinaryTracking
    -> Disable Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1.Centroid) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #3
            WorkflowInput Source1
            -> WorkflowOutput
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item2 as ID,
              it.Item1 as Centroid
            )
        -> WorkflowOutput
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_BinaryRegions, Selector="")

    SubscribeSubject "BinaryRegionsTrackingEvents(Subject)"
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1
        -> MemberSelector(Selector=ConnectedComponents)
        -> WorkflowOutput
    -> Aeon.Acquisition.FormatBinaryRegions
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop_BinaryTracking, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject "BinaryRegionsTrackingEvents(Subject)"
    -> FormatBinaryTrackingState(Address=221)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop_BinaryTracking, Heartbeats="", ClosingDuration=nil)

    Annotation HeadTailObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=HeadTailObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> FormatHeadTail
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop_HeadTail, Heartbeats="", ClosingDuration=nil)
    -> Disable Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        -> MemberSelector(Selector=Centroid) => #2
        #1 -> MemberSelector(Selector=Head) => #3
        #1 -> MemberSelector(Selector=Tail) => #4
        #1 -> MemberSelector(Selector=Heading) => #5
        #1 -> MemberSelector(Selector=Velocity) => #6
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #8
            WorkflowInput Source1
            -> WorkflowOutput
        #2, #3, #4, #5, #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item6 as ID,
              it.Item1 as Centroid,
              it.Item2 as Head,
              it.Item3 as Tail,
              it.Item4 as Heading,
              it.Item5 as Velocity
            )
        -> WorkflowOutput
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_HeadTail, Selector="")

    Annotation LoomAngleObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=LoomAngleObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> FormatDoubleId
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop_LoomAngle, Heartbeats="", ClosingDuration=nil)
    -> Disable Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #3
            WorkflowInput Source1
            -> WorkflowOutput
        Source1=#1, Source6=#3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item2 as ID,
              it.Item1 as InLoomRegionDuration
            )
        -> WorkflowOutput
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_LoomAngle, Selector="")

    Annotation LoomRegionObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=LoomRegionObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> FormatDoubleId
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop_LoomRegion, Heartbeats="", ClosingDuration=nil)
    -> Disable Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=it) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #3
            WorkflowInput Source1
            -> WorkflowOutput
        Source1=#1, Source6=#3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item2 as ID,
              it.Item1 as LoomAngle
            )
        -> WorkflowOutput
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_LoomRegion, Selector="")
